<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT5S</rx:DueTime>
          <rx:Period>PT1H</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties>
            <cv:CapturePropertyAssignment>
              <cv:Property>Fps</cv:Property>
              <cv:Value>120</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameWidth</cv:Property>
              <cv:Value>640</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameHeight</cv:Property>
              <cv:Value>480</cv:Value>
            </cv:CapturePropertyAssignment>
          </cv:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TriggeredWindow">
          <rx:Count xsi:nil="true" />
          <rx:TimeSpan>PT5M</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\repositories\HallLab\rodent-tracking\testing_videos\test_fps0.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>120</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>640</cv:Width>
                  <cv:Height>480</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>