<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>D:\data_from_animal_fac\4hour_test_olenna2020-02-21T11_04_53.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>56</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>0</cv:X>
                  <cv:Y>64</cv:Y>
                  <cv:Width>632</cv:Width>
                  <cv:Height>400</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RegionOfInterest</Selector>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="cv:Crop,p1:Rect">
              <MemberName>RegionOfInterest</MemberName>
              <Value>
                <X>0</X>
                <Y>64</Y>
                <Width>632</Width>
                <Height>400</Height>
              </Value>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new( it as mouseROI )</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>800</cv:MinArea>
                <cv:MaxArea>2500</cv:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new( it as mouse )</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>172</cv:X>
                  <cv:Y>198</cv:Y>
                  <cv:Width>184</cv:Width>
                  <cv:Height>136</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>1000</cv:MinArea>
                <cv:MaxArea>1200</cv:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new( it as wheel )</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RegionOfInterest</Selector>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="cv:Crop,p1:Rect">
              <MemberName>RegionOfInterest</MemberName>
              <Value>
                <X>322</X>
                <Y>170</Y>
                <Width>76</Width>
                <Height>62</Height>
              </Value>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new( it as wheelROI )</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>wheel</scr:Name>
        <scr:Expression>new (it.Value.Item2 as wheel)</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>wheel.Item2.wheel.Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>wheel.Item2.wheel.Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime.TimeOfDay.TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>frameinterval</scr:Name>
        <scr:Expression>new (it as frameinterval)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="DoubleProperty">
          <Value>0.038015999998606276</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>20</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>wheelxvel</scr:Name>
        <scr:Expression>new (it as wheelxvel)</scr:Expression>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="DoubleProperty">
          <Value>0.038015999998606276</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>20</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="BitwiseOr">
        <Operand xsi:type="BooleanProperty">
          <Value>false</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>wheel moving?</scr:Name>
        <scr:Expression>new (it as wheelmoving)</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>wheelyvel</scr:Name>
        <scr:Expression>new (it as wheelyvel)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>mouse</scr:Name>
        <scr:Expression>new (it.Value.Item1.Item1 as mouse)</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>mouse.mouse.Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="DoubleProperty">
          <Value>0.038015999998606276</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>10</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>mouseyvel</scr:Name>
        <scr:Expression>new (it as mouseyvel)</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>mouse.mouse.Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="DoubleProperty">
          <Value>0.038015999998606276</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>10</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="BitwiseOr">
        <Operand xsi:type="BooleanProperty">
          <Value>false</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>mouse moving?</scr:Name>
        <scr:Expression>new (it as mousemoving)</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>mousexvel</scr:Name>
        <scr:Expression>new (it as mousexvel)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>timestamps</scr:Name>
        <scr:Expression>new (it.TimeStamp as timestamp)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\andre\Desktop\all_data2.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="12" Label="Source1" />
      <Edge From="6" To="28" Label="Source1" />
      <Edge From="6" To="45" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="7" To="27" Label="Source4" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="20" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="46" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="15" To="20" Label="Source2" />
      <Edge From="15" To="38" Label="Source2" />
      <Edge From="15" To="31" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="24" Label="Source1" />
      <Edge From="19" To="27" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="26" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="27" Label="Source2" />
      <Edge From="26" To="27" Label="Source3" />
      <Edge From="27" To="47" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="36" Label="Source1" />
      <Edge From="28" To="44" Label="Source4" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="35" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="41" Label="Source2" />
      <Edge From="35" To="44" Label="Source3" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="38" To="43" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="44" Label="Source1" />
      <Edge From="43" To="44" Label="Source2" />
      <Edge From="44" To="47" Label="Source2" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source3" />
      <Edge From="47" To="48" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>